PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.0000, -1.0000, -1.0000]
  expName = taskPrototype
  keyboardBackend = ioHub
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Routines
  Routine start
    CodeComponent init_code
      Code Type = Auto->JS
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      Begin Experiment:
        import pyxid2
        import time
        devices = pyxid2.get_xid_devices()
        assert len(devices) > 0
        d = devices[0]
        d.init_device()
        d.set_pulse_duration(500)

        # one sweep through all lines
        #for i in range(1,9):
        #d.activate_line(lines=[i])
        #time.sleep(1.2)

        #initalize the loop limits for each device
        gaborLim = 24
        ctrlLim = 24
        blockLim = 5
        learnlim = 180
    TextComponent txt_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Begin Experiment

        Press [X]
    KeyboardComponent key_resp
      allowedKeys = 'x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine gaborTrial
    ImageComponent img_gaborTrial
      image [set every repeat] = $stimID
      size = (0.8, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent key_gaborTrial
      allowedKeys = '1', '0'
      correctAns = $keymap
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code_gaborTrial
      Code Type = Auto->JS
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      Begin Routine:
        # sends trigger to fNIRS on initial trial (0)

        if gaborloopc == 0:
            d.activate_line(lines=[1])
  Routine gaborFb
    CodeComponent code_gaborFb
      Code Type = Auto->JS
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      Begin Experiment:
        msg='doh!' #debug msg printing
        gaborloopc = 0
      Begin Routine:
        #provides feedback for trial
        #no response/wrong shows red
        #correct repsonse shows green
        if not key_gaborTrial.keys:
            msg = "Failed to respond"
            txt_gaborfb.color = "Red"
            gaborfbdur = 0.5 #fb default 0.5s
        elif key_gaborTrial.corr: #stored on last run routine
            msg = "Correct!"
            txt_gaborfb.color = "Green"
            gaborfbdur = 0.5 + (1.5 - key_gaborTrial.rt) #leftover t
        else:
            msg = "Incorrect"
            txt_gaborfb.color = "Red"
            gaborfbdur = 0.5 + (1.5 - key_gaborTrial.rt)

        #adds loop counter
        gaborloopc = gaborloopc + 1

        #ends gabor loop at defined limit
        if gaborloopc >= gaborLim:
            gaborLoop.finished = True
    TextComponent txt_gaborfb
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $gaborfbdur
      text [set every repeat] = $msg
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  Routine ctrlTrial
    CodeComponent code_ctrlTrial
      Code Type = Auto->JS
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      Begin Routine:
        # sends trigger to fNIRS on initial trial (0)

        if ctrlloopc == 0:
            d.activate_line(lines=[2])
    ImageComponent imgCtrlTrial
      image [set every repeat] = $ctrlID
      pos = (0, -0.05)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent keyCtrlTrial
      allowedKeys [set every repeat] = '1', '0'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent txtCtrlTrial
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = MATCH [1]                                          NO [0]
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  Routine ctrlFb
    CodeComponent ctrlCode
      Code Type = Auto->JS
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      Begin Experiment:
        msg = "oop"

        ctrlloopc = 0
      Begin Routine:
        #provides feedback for ctrl trials
        if not keyCtrlTrial.keys:
            msg = "Failed to respond"
            txtCtrlFb.color = "Red"
            ctrlfbdur = 0.5 #fb default 0.5s
        elif keyCtrlTrial.corr: #stored on last run routine
            msg = "Correct!"
            txtCtrlFb.color = "Green"
            ctrlfbdur = 0.5 + (1.5 - keyCtrlTrial.rt) #leftover t
        else:
            msg = "Incorrect"
            txtCtrlFb.color = "Red"
            ctrlfbdur = 0.5 + (1.5 - keyCtrlTrial.rt)

        #adds to control loop counter
        ctrlloopc = ctrlloopc + 1

        #ends trial at defined limit
        if ctrlloopc >= ctrlLim:
            ctrlLoop.finished = True
    TextComponent txtCtrlFb
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ctrlfbdur
      text [set every repeat] = $msg
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    TextComponent txtCtrlFbSustain
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ctrlfbdur
      text = MATCH [1]                                          NO [0]
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  Routine end
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Experiment Finished!

        [Q]
    KeyboardComponent key_end
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest1
    CodeComponent code_rest1
      Code Type = Auto->JS
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      Begin Routine:
        #sends trigger 3 to nirX
        d.activate_line(lines=[3])

        #resets gabor loopcounter for next iteration
        gaborloopc = 0

        #declare vector of jittered rest times
        #assign duration based on blockloop index
        #5B x 24T x 2s
        r1_jitter = [12,14,16,18,20]
        r1_jitdur = r1_jitter[blockloopc]
    TextComponent txtFixation1
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = $r1_jitdur
      text [set every repeat] = +
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  Routine rest2
    CodeComponent code_rest2
      Code Type = Auto->JS
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      Begin Experiment:
        #initalize blockloop counter starting at 0
        #blockloop gets ++ at end of each loop
        blockloopc = 0
      Begin Routine:
        #sends trigger 3 to nirX
        d.activate_line(lines=[3])

        #resets ctrl loop counter for next iteration
        ctrlloopc = 0

        #declare vector of jittered rest times
        #assign duration based on blockloop index
        #5B x 24T x 2s
        r2_jitter = [20,18,16,14,12]
        r2_jitdur = r2_jitter[blockloopc]

        #add to blockloop counter
        blockloopc = blockloopc + 1

        #ends loop after once blocklimit is reached
        if blockloopc >= blockLim:
            blockLoop.finished = True
    TextComponent txtFixation2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = $r2_jitdur
      text [set every repeat] = +
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  Routine learnTrial
    ImageComponent imgLearn
      image [set every repeat] = $stimID
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent keyLearn
      allowedKeys = '1', '0'
      correctAns = $keymap
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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    CodeComponent codeLearnTrial
      Code Type = Auto->JS
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      Begin Routine:
        #start of experiment trigger
  Routine learnFb
    CodeComponent codeLearnFb
      Code Type = Auto->JS
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      Begin Experiment:
        learnloopc = 0
      Begin Routine:
        #provides feedback for trial
        #no response/wrong shows red
        #correct repsonse shows green
        if not keyLearn.keys:
            msg = "Failed to respond"
            txtLearnFb.color = "Red"
            learnFbDur = 1.0 #fb default 0.5s
        elif keyLearn.corr: #stored on last run routine
            msg = "Correct!"
            txtLearnFb.color = "Green"
            learnFbDur = 1.0 + (2.0 - keyLearn.rt) #leftover t
        else:
            msg = "Incorrect"
            txtLearnFb.color = "Red"
            learnFbDur = 1.0 + (2.0 - keyLearn.rt)

        #adds loop counter
        learnloopc = learnloopc + 1

        #ends gabor loop at defined limit
        if learnloopc >= learnlim:
            learnLoop.finished = True
    TextComponent txtLearnFb
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $learnFbDur
      text [set every repeat] = $msg
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  Routine rest0
    CodeComponent codeRest0
      Code Type = Auto->JS
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      Begin Routine:
        #sends trigger 3 to nirX
        d.activate_line(lines=[3])
    TextComponent txtRest0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = +
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Flow
  Routine start
  LoopInitiator learnLoop loopType="TrialHandler"
    conditionsFile = CR_coord_arbitrary.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cpi', 32.7989956994058), ('deg', 39.7928511961921), ('keymap', 1), ('stimNum', 1), ('stimID', 'stim_CR/CR_A_1.png')]),
      OrderedDict([('cpi', 46.6016562019535), ('deg', 74.7022902898009), ('keymap', 1), ('stimNum', 2), ('stimID', 'stim_CR/CR_A_2.png')]),
      OrderedDict([('cpi', 44.3537936228233), ('deg', 80.6072195661703), ('keymap', 1), ('stimNum', 3), ('stimID', 'stim_CR/CR_A_3.png')]),
      OrderedDict([('cpi', 55.4742466120659), ('deg', 71.4500569481669), ('keymap', 1), ('stimNum', 4), ('stimID', 'stim_CR/CR_A_4.png')]),
      OrderedDict([('cpi', 59.8206802679876), ('deg', 48.9675497918339), ('keymap', 1), ('stimNum', 5), ('stimID', 'stim_CR/CR_A_5.png')]),
      OrderedDict([('cpi', 69.1430628740741), ('deg', 67.5613368762024), ('keymap', 1), ('stimNum', 6), ('stimID', 'stim_CR/CR_A_6.png')]),
      OrderedDict([('cpi', 50.1430839358375), ('deg', 48.546135871112), ('keymap', 1), ('stimNum', 7), ('stimID', 'stim_CR/CR_A_7.png')]),
      OrderedDict([('cpi', 73.8143508558617), ('deg', 65.1719996557286), ('keymap', 1), ('stimNum', 8), ('stimID', 'stim_CR/CR_A_8.png')]),
      OrderedDict([('cpi', 64.344191618972), ('deg', 43.9700782752635), ('keymap', 1), ('stimNum', 9), ('stimID', 'stim_CR/CR_A_9.png')]),
      OrderedDict([('cpi', 72.8338551348971), ('deg', 64.7935414182491), ('keymap', 1), ('stimNum', 10), ('stimID', 'stim_CR/CR_A_10.png')]),
      OrderedDict([('cpi', 70.9795848467393), ('deg', 43.88420402559), ('keymap', 1), ('stimNum', 11), ('stimID', 'stim_CR/CR_A_11.png')])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
    Routine learnTrial
    Routine learnFb
  LoopTerminator learnLoop
  Routine rest0
  LoopInitiator blockLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 6
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    LoopInitiator gaborLoop loopType="TrialHandler"
      conditionsFile = CR_coord_arbitrary.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('cpi', 32.7989956994058), ('deg', 39.7928511961921), ('keymap', 1), ('stimNum', 1), ('stimID', 'stim_CR/CR_A_1.png')]),
        OrderedDict([('cpi', 46.6016562019535), ('deg', 74.7022902898009), ('keymap', 1), ('stimNum', 2), ('stimID', 'stim_CR/CR_A_2.png')]),
        OrderedDict([('cpi', 44.3537936228233), ('deg', 80.6072195661703), ('keymap', 1), ('stimNum', 3), ('stimID', 'stim_CR/CR_A_3.png')]),
        OrderedDict([('cpi', 55.4742466120659), ('deg', 71.4500569481669), ('keymap', 1), ('stimNum', 4), ('stimID', 'stim_CR/CR_A_4.png')]),
        OrderedDict([('cpi', 59.8206802679876), ('deg', 48.9675497918339), ('keymap', 1), ('stimNum', 5), ('stimID', 'stim_CR/CR_A_5.png')]),
        OrderedDict([('cpi', 69.1430628740741), ('deg', 67.5613368762024), ('keymap', 1), ('stimNum', 6), ('stimID', 'stim_CR/CR_A_6.png')]),
        OrderedDict([('cpi', 50.1430839358375), ('deg', 48.546135871112), ('keymap', 1), ('stimNum', 7), ('stimID', 'stim_CR/CR_A_7.png')]),
        OrderedDict([('cpi', 73.8143508558617), ('deg', 65.1719996557286), ('keymap', 1), ('stimNum', 8), ('stimID', 'stim_CR/CR_A_8.png')]),
        OrderedDict([('cpi', 64.344191618972), ('deg', 43.9700782752635), ('keymap', 1), ('stimNum', 9), ('stimID', 'stim_CR/CR_A_9.png')]),
        OrderedDict([('cpi', 72.8338551348971), ('deg', 64.7935414182491), ('keymap', 1), ('stimNum', 10), ('stimID', 'stim_CR/CR_A_10.png')]),
        OrderedDict([('cpi', 70.9795848467393), ('deg', 43.88420402559), ('keymap', 1), ('stimNum', 11), ('stimID', 'stim_CR/CR_A_11.png')])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
      Routine gaborTrial
      Routine gaborFb
    LoopTerminator gaborLoop
    Routine rest1
    LoopInitiator ctrlLoop loopType="TrialHandler"
      conditionsFile = ctrl_coord.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('ctrlID', 'stim_ctrl/incongruent_1.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_2.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_3.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_4.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_5.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_6.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_7.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_8.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_9.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_10.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_11.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_12.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_13.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_14.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_15.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_16.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_17.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_18.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_19.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_20.png'), ('ans', 0)]),
        OrderedDict([('ctrlID', 'stim_ctrl/incongruent_21.png'), ('ans', 0)])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
      Routine ctrlTrial
      Routine ctrlFb
    LoopTerminator ctrlLoop
    Routine rest2
  LoopTerminator blockLoop
  Routine end
